//create plots
objref plots
plots = new Graph(0)
addplot(plots, 0)

// view: xmin, ymin, xrange, yrange, winleft, wintop, winwidth, winheight
plots.view(0, -110, tstop, 210, 0, 290, 640, 320)

// addvar: "label", "variable", color_index, brush_index
plots.addvar("Neuron_1 Vm", "Neuron_1.v(0.5)", 3, 1)
plots.addvar("Neuron_2 Vm", "Neuron_2.v(0.5)", 2, 1)
plots.addvar("Neuron_3 Vm", "Neuron_3.v(0.5)", 4, 1)


// New vector for recording Vsoma
objref vvec[3], tvec
tvec = new Vector()
tvec.record(&t) // record time
vvec[0] = new Vector()
vvec[1] = new Vector()
vvec[2] = new Vector()

// record Vm to vectors
Neuron_1 vvec[0].record(&v(0.5)) // record v at cell
Neuron_2 vvec[1].record(&v(0.5)) // record v at cell
Neuron_3 vvec[2].record(&v(0.5)) // record v at cell

// to record state variables of a point process defined by NMODL
//objref mvec
//mvec = new Vector()
// To record a state variable m of HH_K  (when HH_K is defined as an objref in hoc)
//HH mvec.record(&HH_K.m) 

// to record state variables of a distrivuted process defined by NMODL
// syntax: (neuronName mvec.record(&neruonName.stateVarName_distributedMechName(0.5))

